CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Bact_Cy3
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Bact_Cy3
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.5
    Intensity range for the output image:0.0,1
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Bac_Cy3
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:8
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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enabled:False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
    Select the input objects:Bac_Cy3
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - N
    Select the input image:RescaleIntensity
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:OverlayBact
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Bac_Cy3

MaskImage:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the output image:MaskBackground
    Use objects or an image as a mask?:Objects
    Select object for mask:Bac_Cy3
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    Invert the mask?:No

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Bac_Cy3
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:Bact_Cy3, MaskBackground, RescaleIntensity
    Select objects to measure:Bac_Cy3

ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Mixed2_5_05_04_8
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Mixed2_5_05_04_8.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:RescaleIntensity
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:mixed2_5_05_04_8
    Which objects should be used for locations?:Bac_Cy3
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:Bacteria
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OverlayBact
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bact_Cy3
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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